{load_file("nrngui.hoc")}
{load_file("CellSwc.hoc")}
{load_file("stdlib.hoc")}
//{load_file("cellid.hoc")}
//{load_file("list1.hoc")}
{load_file("RecepterNeuron.hoc")}

strdef pn_filename,rn_filename
pn_filename = "./SWC/PN/toroid/050622_4_sn.swc"
rn_filename = "./SWC/070224_SN-23-R.swc"

objref pc
pc = new ParallelContext()

TSTOP = 500
NUMRN = 50

objref recepters, projection, nclist

proc mkNetwork(){
    mkcells($1)
    connectcells()
}

proc mkcells(){local i localobj cells,rn,nc, nil //recepter neuron
    num_rn = $1
    recepters = new List()
    if(pc.id == 0){
	projection = new CellSwc(pn_filename)
	projection{
	    forall insert hh
	}
	pc.set_gid2node(0,pc.id)
	//	projection.makeSyn(21,1,1,-65)	
	//projection.synapses(21)
	projection.mkSynapses()
	projection.Dend[21] nc = new NetCon(&v(0.5),nil)
	nc.threshold = 1
	pc.cell(0,nc)
    }else{
	for (i=pc.id; i<=$1; i+=pc.nhost){
	    //	    print "pc.id ", pc.id
	    rn = new Stick()
	    recepters.append(rn)
	    pc.set_gid2node(i,pc.id)
	    //print "gid ", i
	    nc = rn.connect2target(nil, 50)
	    pc.cell(i,nc)
	}
    }
}

proc connectcells(){local i,j, targid localobj src,target,syn,nc
    nclist = new List()
    for i = 1, NUMRN{
	if(!pc.gid_exists(0)){continue}
//	print "gid_exists ",pc.gid_exists(0)," pc.id ",pc.id, " i ", i
	target = pc.gid2cell(0)
	syn = target.synlist.object(0)
	nc = pc.gid_connect(i,syn)
	nc.delay = 1
	nc.weight = 0.5
	nclist.append(nc)
    }
}
mkNetwork (NUMRN)

objref stim,ncstim,ncslist,stimlist
proc mkstim(){localobj target
    ncslist = new List()
    stimlist = new List()
    for i = 1, NUMRN{
	if(!pc.gid_exists(i)){continue}
	//print "mkstim ", i
	stim = new NetStim()
	stim.number = 1
	stim.start = 0
	stimlist.append(stim)
	
	target = pc.gid2cell(i)
	ncstim = new NetCon(stim, target.synlist.object(0))
	ncstim.delay = 0
	ncstim.weight = 1
	ncslist.append(ncstim)
    }
}
//mkstim()
proc mkstim_single(){localobj target
    if(!pc.gid_exists(0)){return}
    stim = new NetStim()
    stim.number = 1
    stim.start = 0
    target = pc.gid2cell(0)
    ncstim = new NetCon(stim, target.synlist.object(0))
    ncstim.delay = 0
    ncstim.weight = 0.01
}
//mkstim_single()

proc mkIClamp(){local stoptime, timestep localobj rand
    stoptime = $1
    timestep = $2
    
    rand = new Random()
    
    strdef filename
    if(pc.id!=0){
	for i=0, recepters.count-1{
	    print "mkIClamp pc.id ", pc.id, recepters.count
	    sprint(filename,"./spiketiming/spiketiming%d.dat",int(rand.uniform(0,999)))
	    //sprint(filename,"./spiketiming/spiketiming100.dat")
	    recepters.object(i).setIClamp(stoptime, timestep, filename)
	    print "stim_vec printf ",i
	    //	recepters.object(i).stim_vec.printf()
	}
    }
}
//print dt
mkIClamp(TSTOP, dt)

objref tvec, idvec
proc spikerecord(){local i localobj nc, nil,nclist
    tvec = new Vector()
    idvec = new Vector()
    nclist = new List()
    if(pc.id == 0){
	//print "spike record ",pc.id
	projection.Dend[21] nc = new NetCon(&v(0.5),nil)
	nc.record(tvec,idvec,nc.srcgid)
    }else{
	//print "spike record ",pc.id
	for i=0, recepters.count-1{
	    //print "recepters.count ",recepters.count, " i ",i
	    nc = recepters.object(i).connect2target(nil,50)
	    nc.record(tvec, idvec, nc.srcgid)
	    nclist.append(nc)
	    //print "nc.srcgid ",nc.srcgid
	}
    }
}
spikerecord()

objref RNvolt_vec[50]
objref PNvolt_vec
objref volt_tvec 
proc setVoltageRecord(){local i
    for i= 0, NUMRN-1{
	RNvolt_vec[i] = new Vector()
    }
    volt_tvec = new Vector()
    volt_tvec.record(&t)
    if(pc.id == 0){
	PNvolt_vec = new Vector()
	PNvolt_vec.record(&projection.Dend[21].v(0.5))
    }else{
	for i=0, recepters.count-1{
	    RNvolt_vec[i].record(&recepters.object(i).soma.v(0.5))
	}
    }
}
setVoltageRecord()

tstop = TSTOP
{pc.set_maxstep(10)}
stdinit()
{pc.psolve(tstop)}

proc spikeout(){local i, rank
    pc.barrier()
    if(pc.id==0)printf("\ntime\t cell\n")
    for rank = 0, pc.nhost-1{
	if(rank == pc.id){
//	    print "pc.id  ", pc.id
	    for i = 0, tvec.size-1{
		printf("%g\t %d\n",tvec.x[i],idvec.x[i])
	    }
	}
	pc.barrier()
    }
}
spikeout()

proc fprintVoltageRecord(){localobj mt, file
    mt = new Matrix()
    file = new File()
    strdef filename
    if(pc.id== 0){
	mt.resize(volt_tvec.size(),2)
	mt.setcol(0,volt_tvec)
	mt.setcol(1,PNvolt_vec)
    }else{
	mt.resize(volt_tvec.size(),recepters.count + 1)
	mt.setcol(0,volt_tvec)
	for i=0, recepters.count-1{
	    mt.setcol(i+1,RNvolt_vec[i])
	}
    }
    sprint(filename,"Voltagerecord%d.txt",pc.id)
    file.wopen(filename)
    mt.fprint(file,"%5.5f\t")
    file.close()
}
fprintVoltageRecord()

{pc.runworker()}
{pc.done()}
quit()